PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = nback_COGED_Paradigm
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Routines
  Routine WelcomeScreen
    TextComponent WelcomeText
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Willkommen!

        Das Experiment besteht aus zwei Teilen.
        Im ersten Teil werden Sie eine sogenannte n-back Aufgabe mit verschiedenen Schwierigkeitsstufen durchführen.
        Im zweiten Teil werden Sie die verschiedenen Schwierigkeitsstufen des ersten Teils miteinander vergleichen.

        Drücken Sie die Leertaste, um mit dem ersten Teil zu beginnen und die Instruktion des ersten Levels zu lesen.
    KeyboardComponent WelcomeKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Instruction1back
    TextComponent InstructionText
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        1-back

        Ihnen werden nun nacheinander Buchstaben auf dem Bildschirm präsentiert. Wenn der aktuelle Buchstabe der gleiche ist wie der, der direkt davor präsentiert wurde, dann drücken Sie bitte die rechte Pfeiltaste. Wenn es nicht der gleiche Buchstabe ist, drücken sie bitte die linke Pfeiltaste.
        Reagieren Sie bei jedem Konsonanten bitte so schnell und richtig wie möglich.

        rechts = gleicher Buchstabe wie zuvor
        links = nicht der gleiche Buchstabe wie zuvor

        Drücken Sie die Leertaste, um zu beginnen.
    KeyboardComponent Instruction1Key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine FixationCross
    TextComponent fixcross
      color = black
      font = Courier New
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
      text = +
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  Routine Trial_oneback_run1
    TextComponent trial_1back_run1
      color = black
      font = Courier New
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $Letter
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    KeyboardComponent trial_1back_run1_resp
      allowedKeys [set every repeat] = 'left','right'
      correctAns = $CorrAnswer
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      store = first key
      storeCorrect = True
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  Routine Feedback_1back_run1
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        msg='doh!'#if this comes up we forgot to update the msg!
      Begin Routine:
        nCorr = oneback_run1.data['trial_1back_run1_resp.corr'].sum() # number of correct trials
        pCorr = (nCorr*100)/14 # percentage of correct trials
        pCorr = round(pCorr, 1) # round the percentage to 1 number after the decimal point
        if pCorr >= 50:
            msg = "In diesem Block haben Sie auf " + str(pCorr) + "% der Buchstaben korrekt reagiert.\n\nWeiter so!"
        else:
            msg = "In diesem Block haben Sie auf " + str(pCorr) + "% der Buchstaben korrekt reagiert.\n\nBitte strengen Sie sich mehr an!"
    TextComponent fb_1back_run1
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg
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    KeyboardComponent fb_key_1_1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine WelcomeScreen
  Routine Instruction1back
  LoopInitiator oneback_run1 loopType="TrialHandler"
    conditionsFile = ..\..\..\Stimuli\ForTestingTheParadigm.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Letter': 'H', 'CorrAnswer': 'left', 'Stimulus': 'Distractor'},
      {'Letter': 'Q', 'CorrAnswer': 'left', 'Stimulus': 'Pretarget'},
      {'Letter': 'Q', 'CorrAnswer': 'right', 'Stimulus': 'Target'},
      {'Letter': 'T', 'CorrAnswer': 'left', 'Stimulus': 'Distractor'},
      {'Letter': 'Q', 'CorrAnswer': 'left', 'Stimulus': 'Lure'},
      {'Letter': 'L', 'CorrAnswer': 'left', 'Stimulus': 'Distractor'},
      {'Letter': 'V', 'CorrAnswer': 'left', 'Stimulus': 'Pretarget'},
      {'Letter': 'V', 'CorrAnswer': 'right', 'Stimulus': 'Target'},
      {'Letter': 'K', 'CorrAnswer': 'left', 'Stimulus': 'Distractor'},
      {'Letter': 'G', 'CorrAnswer': 'left', 'Stimulus': 'Pretarget'},
      {'Letter': 'G', 'CorrAnswer': 'right', 'Stimulus': 'Target'},
      {'Letter': 'G', 'CorrAnswer': 'right', 'Stimulus': 'Target'},
      {'Letter': 'P', 'CorrAnswer': 'left', 'Stimulus': 'Pretarget'},
      {'Letter': 'P', 'CorrAnswer': 'right', 'Stimulus': 'Target'}]
    Routine FixationCross
    Routine Trial_oneback_run1
  LoopTerminator oneback_run1
  Routine Feedback_1back_run1
