PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = ER_paradigm
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Routines
  Routine WelcomeScreen
    TextComponent WelcomeText
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Willkommen!

        Das Experiment besteht aus zwei Teilen.
        Im ersten Teil werden Sie  Bilder betrachten und mittels verschiedener Strategien Ihre Emotionen regulieren.

        Im zweiten Teil werden Sie die verschiedenen Emotionsregulationsstrategien miteinander vergleichen.

        Zum Forfahren Leertaste drücken.
    KeyboardComponent WelcomeResponse
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    CodeComponent code_shuffle_blocks
      Code Type = Auto->JS
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      Begin Experiment:
        # #################################
        # Define correct numbe of Trials
        # #################################
        TotalTrialNr = 15  # 125 ?!
        Trials_Block = 3 # 25

        # #################################
        # Randomize negative picture sets across negative Blocks
        # #################################

        # create a list of 4 negative blocks
        Stimuli_Order = list(range(1,6))
        # randomize order
        shuffle(Stimuli_Order)
    ParallelOutComponent p_port_start
      address = 0x0378
      stopData = 100
      syncScreen = True
      syncScreenRefresh = False
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  Routine fixcross
    TextComponent text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine Pics_View
    ImageComponent image_view
      image [set every repeat] = $ImageFile
      size = (1, 0.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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  Routine Instruction_Reg
    TextComponent text_Instruction
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $instr_1 + '\n\n' + 'In diesem Block werden Sie eine Reihe von Bildern sehen. Diese sollen Sie aufmerksam ansehen.' + '\n' + instr_2 + '\n\n' + 'Bitte konzentrieren Sie Ihre Regulationsbemühungen nur auf das Bild, nicht aber auf die Zeiträme zwischen den Bildern.' + '\n\n' + 'Zum Starten des Blocks Leertaste dürcken'
    KeyboardComponent instr_reg_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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    CodeComponent code_reg
      Code Type = Auto->JS
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      Begin Routine:
        if blocks_reg.thisN  == 0: # first regulation block
            conds_reg_File = 'StimuliNegative_{}.xlsx'.format(Stimuli_Order[1])

        elif blocks_reg.thisN  == 1: # second block
            conds_reg_File = 'StimuliNegative_{}.xlsx'.format(Stimuli_Order[2])

        elif blocks_reg.thisN  == 2: # third block
            conds_reg_File = 'StimuliNegative_{}.xlsx'.format(Stimuli_Order[3])
  Routine Instruction_View
    TextComponent text_ActiveViewing
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        ANSCHAUEN

        In diesem Block werden Sie eine Reihe von Bildern sehen.
        Diese sollen Sie aufmerksam ansehen. Bitte reagieren
        Sie natürlich auf die Bildinhalte ohne aufkommende
        Emotionen zu verändern!.

        Zum Starten des Blocks bitte Leertaste drücken.
    KeyboardComponent instr_view_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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    CodeComponent code_view
      Code Type = Auto->JS
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      Begin Routine:
        if blocks_view.thisN  == 1: # only second block
            conds_view_File = 'StimuliNegative_{}.xlsx'.format(Stimuli_Order[0])
  Routine Slider_Arousal
    TextComponent text_slider_arousal
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Wie hoch schätzen Sie Ihre durchschnittliche emotionale Aufregung beim Betrachten der Bilder ein?
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    SliderComponent slider_arousal
      borderColor = black
      color = black
      fillColor = black
      forceEndRoutine = True
      granularity = 0
      labels = ("sehr gering", "sehr hoch")
      letterHeight = 0.05
      pos = (0, -0.2)
      size = [1.0,0.1]
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0,400)
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  Routine Slider_Effort
    TextComponent text_slider_effort
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Wie hoch schätzen Sie Ihre geistige Anstrengung während des Anwendens der Strategie ein?
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    SliderComponent slider_effort
      borderColor = black
      color = black
      fillColor = black
      forceEndRoutine = True
      granularity = 0
      labels = ("sehr gering","sehr hoch")
      letterHeight = 0.05
      pos = (0, -0.2)
      size = (1.0,0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0,400)
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  Routine placeholder_discounting
  Routine Choice_reapply
    TextComponent text_choice
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Nun werden Sie zum letzten Mal eine Reihe von Bildern sehen. Diese sollen Sie aufmerksam ansehen und dabei eine der vorherigen Strategien anwenden. Sie können sich nun entscheiden, welche der drei Strategien Sie einsetzen möchten.

        Entscheiden Sie sich bitte nun for eine der drei Strategien.

        Drücken Sie bitte die Taste
        1    für Ablenken
        2    für Distanzieren
        3    für Unterdrücken
    KeyboardComponent resp_choice
      allowedKeys = '1','2','3'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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  Routine Pics_Reg
    ImageComponent image_reg
      image [set every repeat] = $ImageFile
      size = (1,0.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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  Routine Pics_Choice
    ImageComponent image
      image [set every repeat] = $ImageFile
      size = (1.0, 0.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    CodeComponent code_choice
      Code Type = Auto->JS
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      Begin Experiment:
        Stimuli_Choice = 'StimuliNegative_{}.xlsx'.format(Stimuli_Order[4])
  Routine Instruction_Choice
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if resp_choice.keys == '1':
            instr_choice_1 = 'ABLENKEN'
            instr_choice_2 = 'Denken Sie während des Betrachtens der Bilder an etwas Neutrales, das mit dem Bild nichts zu tun hat. Das könnten geometrische Figuren, Alltagstätigkeiten oder bekannte Orte sein.'
        elif resp_choice.keys == '2':
            instr_choice_1 = 'DISTANZIEREN'
            instr_choice_2 = 'Nehmen Sie die Position eines uninvolvierten Beobachters ein. Denken Sie über das Bild in einer neutralen Weise nach.'
        elif resp_choice.keys == '3':
            instr_choice_1 = 'UNTERDRÜCKEN'
            instr_choice_2 = 'Unterdrücken Sie alle aufkommenden Emotionen. Wenn Sie also die Bilder ansehen, verhalten Sie sich so, dass eine außenstehende Person nicht sehen kann, welche Emotionen Sie gerade empfinden.'
    TextComponent text_instr_choice
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text [set every repeat] = $instr_choice_1 + '\n\n' + 'In diesem Block werden Sie eine Reihe von Bildern sehen. Diese sollen Sie aufmerksam ansehen.' + '\n' + instr_choice_2 + '\n\n' + 'Bitte konzentrieren Sie Ihre Regulationsbemühungen nur auf das Bild, nicht aber auf die Zeiträme zwischen den Bildern.' + '\n\n' + 'Zum Starten des Blocks Leertaste dürcken'
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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  Routine EndScreen
    TextComponent text_end
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Das Experiment ist nun beendet. Vielen Dank für die Teilnahme!

        Bitte wenden Sie sich an die Versuchsleitung.

        Zum Beenden bitte Leertaste drücken.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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    ParallelOutComponent p_port_end
      address = 0x0378
      stopData = 200
      syncScreen = True
      syncScreenRefresh = False
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Flow
  Routine WelcomeScreen
  LoopInitiator blocks_view loopType="TrialHandler"
    conditionsFile = blocks_view.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'condsFile': 'StimuliNeutral.xlsx', 'Trigger': 1},
      {'condsFile': 'StimuliNegative_1.xlsx', 'Trigger': 2}]
    Routine Instruction_View
    LoopInitiator trials_view loopType="TrialHandler"
      conditionsFile = $conds_view_File
      loopType = random
      nReps = 1
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      Routine Pics_View
      Routine fixcross
    LoopTerminator trials_view
    Routine Slider_Arousal
    Routine Slider_Effort
  LoopTerminator blocks_view
  LoopInitiator blocks_reg loopType="TrialHandler"
    conditionsFile = blocks_reg.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Block': 1, 'condsFile': 'StimuliNegative.xlsx', 'n_reps': 3, 'instr_1': 'ABLENKEN', 'instr_2': 'xyz', 'Trigger': 3},
      {'Block': 2, 'condsFile': 'StimuliNegative.xlsx', 'n_reps': 3, 'instr_1': 'DISTANZIEREN', 'instr_2': 'xyz', 'Trigger': 4},
      {'Block': 3, 'condsFile': 'StimuliNegative.xlsx', 'n_reps': 3, 'instr_1': 'UNTERDRÜCKEN', 'instr_2': 'xyz', 'Trigger': 5}]
    Routine Instruction_Reg
    LoopInitiator trials_reg loopType="TrialHandler"
      conditionsFile = $conds_reg_File
      loopType = random
      nReps = 1
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      Routine Pics_Reg
      Routine fixcross
    LoopTerminator trials_reg
    Routine Slider_Arousal
    Routine Slider_Effort
  LoopTerminator blocks_reg
  Routine placeholder_discounting
  Routine Choice_reapply
  Routine Instruction_Choice
  LoopInitiator trials_choice loopType="TrialHandler"
    conditionsFile = $Stimuli_Choice
    loopType = random
    nReps = 1
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    Routine Pics_Choice
    Routine fixcross
  LoopTerminator trials_choice
  Routine Slider_Arousal
  Routine Slider_Effort
  Routine EndScreen
