PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = ER_paradigm
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Routines
  Routine WelcomeScreen
    TextComponent WelcomeText
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Willkommen!

        In diesem Training sollen Sie drei Emotionsregulations-Strategien kennen lernen und diese erproben. Außerdem sollen Sie die verschiedenen Fragen am Ende jedes Blockes kennen lernen.

        Während des Experimentes werden noch keine Messungen vorgenommen.

        Zum Forfahren Leertaste drücken.
    KeyboardComponent WelcomeResponse
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine fixcross
    TextComponent text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine Pics_View
    ImageComponent image_view
      image [set every repeat] = $ImageFile
      size = (1, 0.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
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  Routine Instruction_Reg
    TextComponent text_Instruction
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $instr_1 + '\n\n' + 'In diesem Block werden Sie eine Reihe von Bildern sehen. Diese sollen Sie aufmerksam ansehen.' + instr_2 + '\n\n' + 'Zum Starten des Blocks Leertaste dürcken'
    KeyboardComponent instr_reg_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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    CodeComponent code_reg
      Code Type = Auto->JS
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      Begin Routine:
        if blocks_reg.thisN  == 0: # first block
            conds_reg_File = 'StimuliNegative_{}.xlsx'.format(Block_Order[1])

        elif blocks_reg.thisN  == 1: # second block
            conds_reg_File = 'StimuliNegative_{}.xlsx'.format(Block_Order[2])

        elif blocks_reg.thisN  == 2: # third block
            conds_reg_File = 'StimuliNegative_{}.xlsx'.format(Block_Order[3])
  Routine Instruction_View
    TextComponent text_ActiveViewing
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        ANSCHAUEN

        In diesem Block werden Sie eine Reihe von Bildern sehen.
        Diese sollen Sie aufmerksam ansehen. Bitte reagieren
        Sie natürlich auf die Bildinhalte ohne aufkommende
        Emotionen zu verändern!.

        Zum Starten des Blocks bitte Leertaste drücken.
    KeyboardComponent instr_view_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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  Routine Slider_Arousal
    TextComponent text_slider_arousal
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Wie hoch schätzen Sie Ihre durchschnittliche emotionale Aufregung beim Betrachten der Bilder ein?
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    SliderComponent slider_arousal
      borderColor = black
      color = black
      fillColor = black
      forceEndRoutine = True
      granularity = 0
      labels = ("sehr gering", "sehr hoch")
      letterHeight = 0.05
      pos = (0, -0.2)
      size = [1.0,0.1]
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0,400)
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  Routine Slider_Effort
    TextComponent text_slider_effort
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Wie hoch schätzen Sie Ihre geistige Anstrengung während des Anwendens der Strategie ein?
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    SliderComponent slider_effort
      borderColor = black
      color = black
      fillColor = black
      forceEndRoutine = True
      granularity = 0
      labels = ("sehr gering","sehr hoch")
      letterHeight = 0.05
      pos = (0, -0.2)
      size = (1.0,0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0,400)
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  Routine placeholder_discounting
  Routine Pics_Reg
    ImageComponent image_reg
      image [set every repeat] = $ImageFile
      size = (1,0.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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  Routine Pics_Choice
    ImageComponent image
      image [set every repeat] = $ImageFile
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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Flow
  Routine WelcomeScreen
  Routine Instruction_View
  LoopInitiator trials_view loopType="TrialHandler"
    conditionsFile = Stimuli_view.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'ImageFile': 'Stimuli/234.jpg'},
      {'ImageFile': 'Stimuli/248.jpg'},
      {'ImageFile': 'Stimuli/3068.jpg'}]
    Routine Pics_View
    Routine fixcross
  LoopTerminator trials_view
  Routine Slider_Arousal
  Routine Slider_Effort
